CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. Drag and drop your image folders and your illum correction images into the module.', 'You can also specify a set of rules to include only the desired files in your selected folders.', 'For a large screen, it may take a long time to read and collect all the images. However, this only needs to be done once as the file list is saved as part of the project file.']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
    Filter images?:Custom
    Select the rule criteria:or (extension does isimage) (file does contain ".npy")

Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e. metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file. The settings here assume a Perkin Elmer Opera Phenix microscope and use the folder name to extract the Plate and the file name to extract the Row, Column, Site, and Channel. The Well is automatically extracted.', 'When using your own dataset, you will need to update this module to recognize and extract your metadata.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<Plate>[A-Z]{2}[0-9]{8})
    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:r(?P<Row>[0-9]{2})c(?P<Column>[0-9]{2})f(?P<Site>[0-9]{2}).*ch(?P<Channel>[0-9]{1})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', 'The settings here match the channels by the channel number collected in the Metadata module. They also recognize the illumination correction images and match them to the images by plate.', ' Setting the image set matching method to Metadata has the advantage of omitting sites in which there is a metadata mismatch i.e missing files.', 'Select Update to create your image sets and populate the chart below. Note that this may take several minutes depending upon your number of files.']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
    Assign a name to:Images matching rules
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    Match metadata:[{'IllumAGP': 'Plate', 'IllumBrightfield': 'Plate', 'IllumBrightfield_H': 'Plate', 'IllumBrightfield_L': 'Plate', 'IllumDNA': 'Plate', 'IllumER': 'Plate', 'IllumMito': 'Plate', 'IllumRNA': 'Plate', 'OrigAGP': 'Plate', 'OrigBrightfield': 'Plate', 'OrigBrightfield_H': 'Plate', 'OrigBrightfield_L': 'Plate', 'OrigDNA': 'Plate', 'OrigER': 'Plate', 'OrigMito': 'Plate', 'OrigRNA': 'Plate'}, {'IllumAGP': None, 'IllumBrightfield': None, 'IllumBrightfield_H': None, 'IllumBrightfield_L': None, 'IllumDNA': None, 'IllumER': None, 'IllumMito': None, 'IllumRNA': None, 'OrigAGP': 'Well',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
    Image set matching method:Metadata
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    Assignments count:17
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "1")
    Name to assign these images:OrigMito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "2")
    Name to assign these images:OrigAGP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "3")
    Name to assign these images:OrigRNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "4")
    Name to assign these images:OrigER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "5")
    Name to assign these images:OrigDNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "6")
    Name to assign these images:OrigBrightfield_H
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "7")
    Name to assign these images:OrigBrightfield_L
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "7")
    Name to assign these images:OrigBrightfield_L
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "8")
    Name to assign these images:OrigBrightfield
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "IllumAGP.npy")
    Name to assign these images:IllumAGP
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does contain "IllumBrightfield.npy")
    Name to assign these images:IllumBrightfield
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does contain "IllumDNA.npy")
    Name to assign these images:IllumDNA
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does contain "IllumER.npy")
    Name to assign these images:IllumER
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does contain "IllumMito.npy")
    Name to assign these images:IllumMito
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does contain "IllumRNA.npy")
    Name to assign these images:IllumRNA
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    Select the image type:Illumination function
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    Select the rule criteria:or (file does contain "IllumHighZBF.npy") (file does contain "IllumBrightfield_H.npy")
    Name to assign these images:IllumBrightfield_H
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    Select the image type:Illumination function
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    Select the rule criteria:or (file does contain "IllumLowZBF.npy") (file does contain "IllumBrightfield_L.npy")
    Name to assign these images:IllumBrightfield_L
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    Select the image type:Illumination function
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Well

FlagImage:[module_num:5|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notes:["This module sets the pipeline to skip all sites that aren't site 2.", 'If you would like to segment all sites, uncheck this module.']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
    Hidden:1
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:Yes
    Flag is based on:Whole-image measurement
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    Which measurement?:Metadata_Site
    Flag images based on low values?:Yes
    Minimum value:1.9
    Flag images based on high values?:Yes
    Maximum value:2.1
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    Ignore flag skips on last cycle?:No

CorrectIlluminationApply:[module_num:6|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notes:['This module applies the illumination correction functions created by the illum pipeline to the input images.', 'If you would like to measure QC metrics of uncorrected images you can uncheck this module, though you will need to modify the image names in subsequent modules so that they are looking for the input images.']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
    Select the input image:OrigDNA
    Name the output image:DNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:OrigER
    Name the output image:ER
    Select the illumination function:IllumER
    Select how the illumination function is applied:Divide
    Select the input image:OrigAGP
    Name the output image:AGP
    Select the illumination function:IllumAGP
    Select how the illumination function is applied:Divide
    Select the input image:OrigMito
    Name the output image:Mito
    Select the illumination function:IllumMito
    Select how the illumination function is applied:Divide
    Select the input image:OrigBrightfield
    Name the output image:Brightfield
    Select the illumination function:IllumBrightfield
    Select how the illumination function is applied:Divide
    Select the input image:OrigRNA
    Name the output image:RNA
    Select the illumination function:IllumRNA
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationCalculate:[module_num:7|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notes:['Performs a calculation to remove background and fluorescent noise in each image.', 'Note that this correction is applied only to images used for identifying nuclei. CellPainting analysis measurements are NOT taken on images that have undergone this correction.']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
    Select the input image:DNA
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Background
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    Block size:30
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:50
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:8|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notes:['Applies the illumination correction from the previous module to the DNA image.', 'Note that this correction is applied only to images used for identifying nuclei. CellPainting analysis measurements are NOT taken on images that have undergone this correction.']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
    Select the input image:DNA
    Name the output image:CorrBlue
    Select the illumination function:IllumBlue
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:9|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notes:['Identify the nuclei based on the DNA image.', ' The settings here were chosen based on the image data and acqusition settings provided in Cimini et al., Nature Protocols, 2022. Changing the image acqusition settings may affect a number of these parameters. You should optimize these parameters until they perform well to identify nuclei in your particular dataset.', 'Typical diameter of objects: From the display window menu select Tools > Measure length. Click/drag to measure diameters of a few select nuclei.', 'Thresholding strategy: Global works fine in most cases but Adaptive may work better if the background has non-uniform illumination. However', ' the illumination correction in CorrectIlluminationApply should mitigate the latter.', 'Thresholding method: Select the method which provides the best foreground/background separation. Adjust the threshold corrrection factor if the threshold is consistently above/below where you want it to be for most images tested. ', 'Lower threshold bound: Mouse over the background region to see the intensity variation in the lower-right of the display window.', 'Method to distinguish clumped objects: Use Intensity if the intensity gradient dividing touching nuclei are pretty clear even if clumpy. Use Shape if the nuclei are usually well-separated (and Intensity doesnt work).', 'Method to draw dividing lines between clumped objects: Intensity usually gives more realistic-looking boundary lines.', 'Size of smoothing filter/minimum distance between local maxima: Override defaults if nuclei are getting under/over-segmented.']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
    Select the input image:CorrBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,90
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:8
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:Yes
    Select maxima color:Blue
    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.005,1
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:10|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notes:['Identify the cells using the nuclei objects plus an image representative of the cell body. Several of the channels could suffice for this purpose, but we chose the RNA channel as optimal. Using the “Watershed-Image” option over the default “Propagate” methods seems to often better capture the cell boundaries, especially when the cells are confluent.']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:RNA
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:0.7
    Lower and upper bounds on threshold:0.005,.06
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyTertiaryObjects:[module_num:11|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notes:['The cytoplasm is identified as the cell body “minus” the nuclei.']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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

RescaleIntensity:[module_num:12|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notes:['This module rescales the DNA image so that it is easy to see by eye.']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
    Select the input image:DNA
    Name the output image:RescaleDNA
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:13|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notes:['This module rescales the AGP image so that it is easy to see by eye.']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
    Select the input image:AGP
    Name the output image:RescaleAGP
    Rescaling method:Stretch each image to use the full intensity range
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
GrayToColor:[module_num:14|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notes:['This module combines the rescaled DNA and AGP images into a single color image for visualization by eye.']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
    Select a color scheme:RGB
    Rescale intensity:No
    Select the image to be colored red:RescaleDNA
    Select the image to be colored green:RescaleAGP
    Select the image to be colored blue:RescaleDNA
    Name the output image:ColorImage
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
ImageMath:[module_num:15|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notes:['This module further modifies the color image to make it easier to see by eye.']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
    Operation:None
    Raise the power of the result by:0.5
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:ColorImage
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
OverlayOutlines:[module_num:16|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notes:['This module overlays the nuclei and cell segmented objects onto the image that is rescaled for visualization.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ImageAfterMath
    Name the output image:OverlayImage
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:white
    Select objects to display:Nuclei
    Select outline color:yellow
    Select objects to display:Cells

SaveImages:[module_num:17|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notes:['This module saves the overlay image created for visualizing object segmentation.']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
    Select the type of image to save:Image
    Select the image to save:OverlayImage
    Select method for constructing file names:Single name
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    Enter single file name:\g<Plate>_\g<Well>
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    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:18|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notes:["This module saves .csv's with information about the identified objects. It is not strictly necessary for the visualization of objects and can be unchecked."]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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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